CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503134940
GitHash:29342ff
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:{{ time_regex }}
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does containregexp "{{ file_regex }}")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DNA': 'Column'}, {u'DNA': 'Time'}, {u'DNA': 'Month'}, {u'DNA': 'Trial'}, {u'DNA': 'Year'}, {u'DNA': 'Day'}, {u'DNA': 'Row'}]
    Image set matching method:Metadata
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    Assignments count:1
    Single images count:0
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    Select the rule criteria:and (file does containregexp "{{ file_regex }}")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:{{ pixel_block_size }}
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract

FlipAndRotate:[module_num:7|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
    Select the input image:CorrBlue
    Name the output image:CorrBlue
    Select method to flip image:Do not flip
    Select method to rotate image:Enter angle
    Crop away the rotated edges?:Yes
    Calculate rotation:Individually
    Enter coordinates of the top or left pixel:0,0
    Enter the coordinates of the bottom or right pixel:0,100
    Select how the specified points should be aligned:horizontally
    Enter angle of rotation:{{ rotate }}

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):{{ object_size_min }},{{ object_size_max }}
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.00
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:uint16
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|{{ well_path}}
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei_data.txt
    Use the object name for the file name?:No

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CorrBlue
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    Select method for constructing file names:Single name
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    Enter single file name:Original_\\\\g<Time>
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    Saved file format:png
    Output file location:Elsewhere...|{{ well_path }}
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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